DataTable(Table10,true,-1)
   OpenInterval
   DataInterval(0,10,Min,10)
   Average(1,AirTemp,FP2, 0)
   Average(1,RelHum,FP2,0)
   Average(1,WaterTemp,FP2, 0)
   Maximum(1,AirTemp,FP2,0,False)
   Minimum(1,AirTemp,FP2,0,False)
   Sample(1,Buoy_Dir,FP2)
   Totalize(1,SolarRad,FP2,0)
   Totalize(1,PIRcor_FG,FP2,0)
   Average(1,PIRcor_F,FP2,0)
   Average(1,PIR_F,FP2,0)
   Average(2,TEppley(),FP2,False)
   WindVector(1, Windspeed, WDCalcul, FP2, 0, 0, 0, 2)
   FieldNames("MeanWS,VectorWS,VectorWD,StDevWD")
   Maximum(1,Windspeed,FP2,0,False)
   Sample(1,BarPress,FP2)
EndTable

DataTable(Table60,true,-1)
   OpenInterval
   DataInterval(0,60,Min,10)
   Sample(1,PanTemp,FP2)
   Sample(1,LoggerVolt,FP2)
   Sample(1,Sig,FP2)
   Sample(1,LoggerID,Long)
   Sample(1,BattVolt,FP2)
   Sample (1,GPSDate,String)
   Sample (1,GPSTime,String)
   Sample (1,Latitude,String)
   Sample (1,Longitude,String)
   Sample (1,SLat,String)
   Sample (1,SLong,String)
EndTable
